<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\OpenEphys\Downloads\lh46 CFC 25-27feb20\Basler_Cam__22940788__20200225_183216350.mp4</cv:FileName>
          <cv:PlaybackRate>100</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>124</cv:X>
            <cv:Y>17</cv:Y>
            <cv:Width>1152</cv:Width>
            <cv:Height>1002</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>0</cv:AdaptationRate>
          <cv:ThresholdValue>20</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:AdaptiveThreshold">
          <cv:MaxValue>255</cv:MaxValue>
          <cv:AdaptiveMethod>GaussianC</cv:AdaptiveMethod>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
          <cv:BlockSize>59</cv:BlockSize>
          <cv:Parameter>80</cv:Parameter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>1</cv:X>
            <cv:Y>1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Ellipse</cv:Shape>
          <cv:Iterations>20</cv:Iterations>
          <cv:Operation>Close</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>800</cv:MinArea>
          <cv:MaxArea>100000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Description>MouseDetected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:PythonTransform">
        <scr:Name>Body Velocity</scr:Name>
        <scr:Script>import math 

@returns(float)
def process(value):
  dx = value.Item1.X-value.Item2.X
  dy = value.Item1.Y-value.Item2.Y
  return math.hypot(dx, dy)</scr:Script>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>position.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Orientation</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>10</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Median</cv:SmoothType>
          <cv:Size1>9</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>freezing.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="18" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="10" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>